# 1 "/opt/topspin3.2/exp/stan/nmr/lists/pp/user/hahnecho"
;hahnecho (TopSpin 2.0)

; Hahn-Echo experiment
; to be used in MAS experiments, echo delay is set to be an integer number
; of rotor periods
; acquisition starts immediately after 180 degree pulse to be able to sample whole echo
; for short echo delays set parameter nsp equal to number of points before echo-top
; in this case use digmod analog or digmod digital and dspfirm smooth
; for full echo accumulation digmod digital and dspfirm sharp can also be used
; set phc0=0 and phc1=d6*swh*360 and do straight fp, sine bell or squared sine bell
; window functions may be used
; for static experiments enter cnst31 = 1e6 and set l1 to desired echo delay in us
; this pulse program can be used to determine 90 and 180 degree selective pulses
; used in MQMAS experiments (mp3q...)
; CAUTION : p3 and p4 are used for subsequent use in MQMAS experiments

;Avance II+ version
;parameters:
;ns : 16 * n
;d1 : recycle delay
;d6 : echo delay (calculated)
;pl1 : RF power level
;p1 : 90 degree pulse
;p2 : =p1*2, 180 degree pulse
;cnst31 : =MAS spin rate (or =1e6 for static)
;l1 : # of rotor cycles (or tau in us)
;ns : 16*n
;zgoptns : -Ddec (if decoupling desired) or blank
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;$COMMENT=Hahn-Echo experiment, MAS or static, standard parameters
;$CLASS=Solids
;$DIM=1D
;$TYPE=direct excitation
;$SUBTYPE=simple 1D

;$OWNER=jdittmer
"p2=p1*2"
"d6=((1s*l1)/cnst31)-(p1/2)-(p2/2)"
;cnst11 : to adjust t=0 for acquisition, if digmod = baseopt
"acqt0=1u*cnst11"

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;pcpd2 : pulse length in decoupling sequence
;pl2 : =120 dB, not used
;pl12 : standard decoupling power level
;pl13 : e.g. used in tppm13


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define delay MCWRK
define delay MCREST
"MCREST = 10m - 0.500000*10m"
"MCWRK = 0.500000*10m"

    dccorr
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1 ze
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2 MCWRK
  MCREST
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  d1 do:f2


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  (p1 pl1 ph1):f1

  d6 cpds2:f2

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  (p2 ph2):f1
  go=2 ph31

  1m do:f2

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  MCWRK  wr #0
  MCWRK
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exit
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ph0=0
ph1=0 1 2 3
ph2=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph30=0
ph31=0 3 2 1 2 1 0 3
